begintemplate PYRAMIDAL

proc celldef() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
}

create soma, apic[17], dend[15], axon

proc topol() { local i
 
  connect apic(0), soma(0.5)
  for i = 1, 2 connect apic[i](0), apic[i-1](1)
  connect apic[3](0), apic[1](1)
  connect apic[4](0), apic(1)
  for i = 5, 6 connect apic[i](0), apic[4](1)
  for i = 7, 8 connect apic[i](0), apic[6](1)
  for i = 9, 10 connect apic[i](0), apic[i-1](1)
  connect apic[11](0), apic[9](1)
  connect apic[12](0), apic[8](1)
  for i = 13, 14 connect apic[i](0), apic[i-1](1)
  connect apic[15](0), apic[13](1)
  connect apic[16](0), apic[12](1)
  connect dend(0), soma(0.5)
  for i = 1, 2 connect dend[i](0), dend(1)
  for i = 3, 4 connect dend[i](0), dend[2](1)
  for i = 5, 6 connect dend[i](0), soma(0.5)
  for i = 7, 9 connect dend[i](0), dend[i-1](1)
  connect dend[10](0), dend[8](1)
  connect dend[11](0), dend[7](1)
  connect dend[12](0), dend[6](1)
  for i = 13, 14 connect dend[i](0), dend[12](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(-10.47, 1.73, -0.15, 25.22)
	pt3dadd(2.14, 1.73, -0.15, 25.22)
	pt3dadd(14.75, 1.73, -0.15, 25.22)
  }
  apic {pt3dclear()
	pt3dstyle(1, 2.14, 1.73, -0.15)
	pt3dadd(-13.83, -11.57, 18.79, 5.88)
	pt3dadd(-14.67, -12.08, 18.79, 5.88)
  }
  apic[1] {pt3dclear()
	pt3dadd(-14.67, -12.08, 18.79, 5.88)
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  }
}
proc shape3d_2() {
  apic[5] {	pt3dadd(-8.9, -143.69, 70.59, 0.84)
	pt3dadd(-8.9, -143.69, 70.75, 0.84)
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  }
}
proc shape3d_3() {
  apic[9] {	pt3dadd(-37.51, -59.8, 58.18, 0.84)
	pt3dadd(-37.51, -59.8, 58.71, 0.84)
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  }
}
proc shape3d_4() {
  apic[15] {	pt3dadd(-107.6, -35.39, 82.42, 1.34)
	pt3dadd(-109.3, -36.06, 82.42, 1.34)
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  }
}
proc shape3d_5() {
  dend {	pt3dadd(1.19, 20.28, 13.86, 4.87)
	pt3dadd(1.19, 23.48, 13.86, 4.37)
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  }
}
proc shape3d_6() {
  dend[3] {	pt3dadd(110.3, 148, 5.68, 1.01)
	pt3dadd(110.8, 149.9, 5.68, 1.01)
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  }
}
proc shape3d_7() {
  dend[5] {  }
  dend[6] {pt3dclear()
	pt3dstyle(1, 2.14, 1.73, -0.15)
	pt3dadd(17.8, 0.84, -3.71, 3.87)
	pt3dadd(18.98, 0.84, -3.71, 3.87)
  }
  dend[7] {pt3dclear()
	pt3dadd(18.98, 0.84, -3.71, 3.87)
	pt3dadd(21.18, -0.51, -9.17, 2.35)
	pt3dadd(22.86, -1.18, -9.24, 2.35)
	pt3dadd(25.38, -2.69, -9.24, 2.02)
	pt3dadd(26.89, -3.7, -9.24, 2.02)
	pt3dadd(28.23, -2.36, -9.24, 1.18)
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  }
}
proc shape3d_8() {
  dend[10] {	pt3dadd(110.2, -36.17, 14.09, 1.01)
	pt3dadd(112.6, -36.67, 14.09, 1.01)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
}

objref all, somatic, basal, apical
proc subsets() { local i
  objref all, somatic, basal, apical
  all = new SectionList()
    soma all.append()
    for i=0, 16 apic[i] all.append()
    for i=0, 14 dend[i] all.append()

  somatic = new SectionList()
    soma somatic.append()

  basal = new SectionList()
    for i=0, 14 dend[i] basal.append()

  apical = new SectionList()
    for i=0, 16 apic[i] apical.append()

}
proc geom() {
}
proc geom_nseg() {
}
proc biophys() {
	forall{
		insert pas

		Ra=100
		cm=1
	}
	soma {
		insert hh
	}

}
access soma

celldef()

endtemplate PYRAMIDAL
